PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = noimgtest
  keyboardBackend = ioHub
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Routines
  Routine instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = greetings, memorise these given words then identify them in a list. respond 'o' for old words, 'n' for new words
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  Routine rightstudy
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      text [set every repeat] = $textPrompt
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  Routine testintro
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = entering test phase. press 'o' for familar words and 'n' for unfamiliar ones
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  Routine righttest
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $textPrompt
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    KeyboardComponent key_resp
      allowedKeys = 'o','n','left'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine thank_you
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = thank you <3
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:11
    conditionsFile = C:/Users/DELL/Dropbox/PC/Desktop/College Stuff/3rd Year/Lab in Psych/experiments/finalproj conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'textPrompt': 'apple', 'imagefile': 'imagesfinalproj/istockphoto-184276818-612x612.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'chair', 'imagefile': 'imagesfinalproj/depositphotos_1409994-stock-photo-isolated-white-wood-chair.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'dog', 'imagefile': 'imagesfinalproj/istockphoto-513133900-612x612.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'snake', 'imagefile': 'imagesfinalproj/istockphoto-144965007-612x612.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'juice', 'imagefile': 'imagesfinalproj/360_F_295671807_4Co8hZAhfvy40iQnHC1h2HDXJZ7ocXyW.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'jacket', 'imagefile': 'imagesfinalproj/360_F_236496348_Pejh1LNDLjsmyDYngfli9n8SNRAARevg.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'phone', 'imagefile': 'imagesfinalproj/360_F_297351123_gd71TTj4GzWtalft9fIQF8XcqsOnwj8S.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'towel', 'imagefile': 'imagesfinalproj/depositphotos_7244704-stock-photo-blue-towel-for-the-bathroom.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'flower', 'imagefile': 'imagesfinalproj/istockphoto-184624919-612x612.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'umbrella', 'imagefile': 'imagesfinalproj/istockphoto-866721702-612x612.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'tree', 'imagefile': 'imagesfinalproj/360_F_230483439_WaZI6DC9jlgCk7NRW02luxqMmDM4j8f6.jpg', 'corr_resp': 'o'},
      {'textPrompt': 'fig', 'imagefile': None, 'corr_resp': 'n'},
      {'textPrompt': 'oil', 'imagefile': None, 'corr_resp': 'n'},
      {'textPrompt': 'laptop', 'imagefile': None, 'corr_resp': 'n'}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
    Routine rightstudy
  LoopTerminator trials
  Routine testintro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/DELL/Dropbox/PC/Desktop/College Stuff/3rd Year/Lab in Psych/experiments/finalproj conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine righttest
  LoopTerminator trials_2
  Routine thank_you
